opentrons/protocol-designer 8.3.0
schemaVersion: 8
protocolName: PD Protocol Crowdsourcing Project - Krishna
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 1, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipetteLocationUpdate:
  p20_multi_gen2: {mount: left}
moduleLocationUpdate:
  thermocyclerModuleV2: {location: 7}
  temperatureModuleV2: {location: 1}
labwareLocationUpdate:
  Opentrons 96 Well Aluminum Block: {loadName: opentrons_96_well_aluminum_block, namespace: opentrons, version: 1, location: temperatureModuleV2}
  Opentrons OT-2 96 Filter Tip Rack 20 µL: {loadName: opentrons_96_filtertiprack_20ul, namespace: opentrons, version: 1, location: 2}
  Opentrons Tough 96 Well Plate 200 µL PCR Full Skirt (slot 7): {loadName: opentrons_96_wellplate_200ul_pcr_full_skirt, namespace: opentrons, version: 2, location: thermocyclerModuleV2}
  Opentrons OT-2 96 Filter Tip Rack 20 µL (1): {loadName: opentrons_96_filtertiprack_20ul, namespace: opentrons, version: 1, location: 4}
  Opentrons Tough 96 Well Plate 200 µL PCR Full Skirt (slot 1): {loadName: opentrons_96_wellplate_200ul_pcr_full_skirt, namespace: opentrons, version: 2, location: Opentrons 96 Well Aluminum Block}
  Opentrons Tough 96 Well Plate 200 µL PCR Full Skirt (slot 3): {loadName: opentrons_96_wellplate_200ul_pcr_full_skirt, namespace: opentrons, version: 2, location: 3}
pipetteTiprackAssignments:
  p20_multi_gen2: [opentrons/opentrons_96_filtertiprack_20ul/1]
ingredients:
  - Sample
  - Mastermix
ingredLocations:
  Opentrons Tough 96 Well Plate 200 µL PCR Full Skirt (slot 1):
    Sample {volume: 200}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8
  Opentrons Tough 96 Well Plate 200 µL PCR Full Skirt (slot 3):
    Mastermix {volume: 200}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8
savedStepForms:
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV2
  thermocyclerFormType: thermocyclerState
  blockIsActive: true
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  blockTargetTemp: 6
  lidIsActive: true
  lidOpen: true
  lidTargetTemp: 55
- stepType: temperature
  stepName: temperature
  moduleId: temperatureModuleV2
  setTemperature: true
  targetTemperature: 4
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 7
  path: single
  changeTip: once
  aspirate_labware: Opentrons Tough 96 Well Plate 200 µL PCR Full Skirt (slot 3)
  aspirate_wells: A1-A8
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  aspirate_flowRate: 7.6
  dispense_labware: Opentrons Tough 96 Well Plate 200 µL PCR Full Skirt (slot 7)
  dispense_wells: A1-A8
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Opentrons Tough 96 Well Plate 200 µL PCR Full Skirt (slot 1)
  aspirate_wells: A1-A8
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  aspirate_flowRate: 7.6
  aspirate_mix_checkbox: true
  aspirate_mix_times: 9
  aspirate_mix_volume: 12
  dispense_labware: Opentrons Tough 96 Well Plate 200 µL PCR Full Skirt (slot 7)
  dispense_wells: A1-A8
  dispense_flowRate: 7.6
  blowout_checkbox: true
  blowout_flowRate: 7.6
  blowout_location: dest_well
  dropTip_location: trashBin
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV2
  thermocyclerFormType: thermocyclerState
  blockIsActive: true
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  blockTargetTemp: 6
  lidIsActive: true
  lidOpen: false
  lidTargetTemp: 55
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV2
  thermocyclerFormType: thermocyclerProfile
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  blockIsActiveHold: false
  lidIsActiveHold: false
  orderedProfileItems:
    - {type: profileCycle, repetitions: 1}
      - {durationMinutes: 1, durationSeconds: 5, temperature: 74, title: Step 1, type: profileStep}
    - {durationMinutes: 0, durationSeconds: 7, temperature: 60, title: Step 2, type: profileStep}
    - {durationMinutes: 0, durationSeconds: 19, temperature: 84, title: Step 3, type: profileStep}
    - {type: profileCycle, repetitions: 13}
      - {durationMinutes: 0, durationSeconds: 44, temperature: 57, title: Step 4, type: profileStep}
  profileTargetLidTemp: 55
  profileVolume: 12
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV2
  thermocyclerFormType: thermocyclerProfile
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  blockIsActiveHold: false
  lidIsActiveHold: false
  orderedProfileItems:
    - {durationMinutes: 0, durationSeconds: 7, temperature: 60, title: Step 1, type: profileStep}
    - {durationMinutes: 0, durationSeconds: 19, temperature: 84, title: Step 2, type: profileStep}
    - {type: profileCycle, repetitions: 13}
      - {durationMinutes: 0, durationSeconds: 44, temperature: 57, title: Step 3, type: profileStep}
  profileTargetLidTemp: 55
  profileVolume: 12
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV2
  thermocyclerFormType: thermocyclerProfile
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  blockIsActiveHold: false
  lidIsActiveHold: false
  orderedProfileItems:
    - {type: profileCycle, repetitions: 1}
      - {durationMinutes: 8, durationSeconds: 0, temperature: 75, title: Step 1, type: profileStep}
  profileTargetLidTemp: 55
  profileVolume: 12
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV2
  thermocyclerFormType: thermocyclerState
  blockIsActive: true
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  blockTargetTemp: 4
  lidIsActive: true
  lidOpen: true
  lidTargetTemp: 55
- stepType: temperature
  stepName: temperature
  moduleId: temperatureModuleV2
  setTemperature: true
  targetTemperature: 4
labwareDefinitions:
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commands:
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- thermocycler/openLid: {moduleId: thermocyclerModuleV2}
- thermocycler/setTargetBlockTemperature: {moduleId: thermocyclerModuleV2, celsius: 6}
- thermocycler/waitForBlockTemperature: {moduleId: thermocyclerModuleV2}
- thermocycler/setTargetLidTemperature: {moduleId: thermocyclerModuleV2, celsius: 55}
- thermocycler/waitForLidTemperature: {moduleId: thermocyclerModuleV2}
- temperatureModule/setTargetTemperature: {moduleId: temperatureModuleV2, celsius: 4}
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